/************************************************************
'ca1' model code repository
Written by Marianne Bezaire, marianne.bezaire@gmail.com, www.mariannebezaire.com
In the lab of Ivan Soltesz, www.ivansolteszlab.org
Published and latest versions of this code are available online at:
ModelDB: 
Open Source Brain: http://www.opensourcebrain.org/projects/nc_ca1

Main code file: ../main.hoc
This file: Last updated on April 9, 2015

************************************************************/
begintemplate SynStore			// Define a template that describes	
										
	public init, SecRefStr,CheckCond1,CheckCond2,tau1,tau2,efirst,tau1a,tau2a,ea,tau1b,tau2b,eb
	public NewSynStr, SynStr, CondStr, GABAabFlag, SynType, Scaling
	
	strdef NewSynStr, SynStr, CondStr, SecRefStr,CheckCond1,CheckCond2, SynType, Scaling		// Define strings

	proc init(){			// Define a proc to set the parameters
										
		SecRefStr = $s1		// 
		
		SynType = $s2		// 
		
		CheckCond1 = $s3
		
		CheckCond2 = $s4 			//
									
		if (strcmp(SynType,"ExpGABAab")==0) {
			GABAabFlag=1
			tau1a = $5				// 
			tau2a = $6				// 
			ea = $7				// 
			tau1b = $8				// 
			tau2b = $9				// 
			eb = $10				// 
		} else {
			GABAabFlag=0
			tau1 = $5				// 
			tau2 = $6				// 
			efirst = $7				// 
			if (strcmp(SynType,"MyExp2Sidnw")==0) {									
				sprint(Scaling,"syn.nw = %s", $s8)			//
			}
		}
		
		sprint(NewSynStr,"newSecRef = %s", SecRefStr)
		sprint(SynStr,"syn = new %s(x)", SynType) // ExpGABAab, MyExp2Sidnw, MyExp2Sid
		sprint(CondStr,"y=(5e-6+%s && 5e-6+%s)", CheckCond1, CheckCond2)

	}

endtemplate SynStore
