// An approximation to the LFP generated by the pyramidal cells in the network.
// Computed as the difference in voltage between apical distal and basal dendrites.

func dipole_lfp() { local avglfp, vlfp, ncells, celltype, pci, gid, i, typei localobj cell

    for celltype=0, numCellTypes-1 {       
		if (strcmp(cellType[celltype].cellType_string, "pyramidalcell")==0) {			
		   ncells = cellType[celltype].cellEndGid - cellType[celltype].cellStartGid
		   vlfp = 0 // vlfp = average over all pyramidal cells
		   for pcitr(&i, &typei, &gid, cellType[celltype].cellStartGid, cellType[celltype].cellEndGid) {
			   cell = pc.gid2cell(gid)
			   vlfp = vlfp + cell.apical[cell.NumApical-1].v(0.5) - cell.basal[0].v(0.5)
		   }
	   }      
   }
   
   // average over all hosts
   if (ncells > 0) {
       avglfp = pc.allreduce(vlfp, 1)/ncells
   }
   
   return avglfp
}

func dipole_pos_lfp() { local avglfp, vlfp, ncells, celltype, pci, gid, i, typei, MaxEDist localobj cell
    // $1 = x, $2 = y, $3 = z in microns
	MaxEDist = 500 // microns
    for celltype=0, numCellTypes-1 {       
		if (strcmp(cellType[celltype].cellType_string, "pyramidalcell")==0) {			
		   ncellsp = 0
		   plfp = 0 // plfp = average over local pyramidal cell
		   for pcitr(&i, &typei, &gid, cellType[celltype].cellStartGid, cellType[celltype].cellEndGid) {
			   cell = pc.gid2cell(gid)
			   //if (sqrt((cell.x-$1)*(cell.x-$1) + (cell.y-$2)*(cell.y-$2) + (cell.z-$3)*(cell.z-$3))<MaxEDist) { // use larger value if z included
			   if (sqrt((cell.x-$1)*(cell.x-$1) + (cell.y-$2)*(cell.y-$2))<MaxEDist) { // ignore z
				ncellsp += 1
				plfp = plfp + cell.apical[cell.NumApical-1].v(0.5) - cell.basal[0].v(0.5)
			   }
		   }
	   }      
   }
   
   // average over all hosts
   if (ncellsp > 0) {
       avgplfp = pc.allreduce(plfp, 1)/ncellsp
   }
   
   return avgplfp
}



// Compute the lfp for the cells whose voltage is recorded 
func dipole_lfp_traceidx() { local vlfp, gid, startgid, endgid, i, j, typei localobj traceidxlist, lfptracelist, lfptrace, cell, vec
    
    traceidxlist = $o1
    lfptracelist = $o2
    
    for celltype=0, numCellTypes-1 {
	if (strcmp(cellType[celltype].cellType_string, "pyramidalcell")==0) {
            startgid = cellType[celltype].cellStartGid
            endgid = cellType[celltype].cellEndGid
            break
        }
    }
    
    j = 0
    for i=0, traceidxlist.size()-1 {
        
        gid = traceidxlist.x(i)
        
        if (pc.gid_exists(gid) && (gid >= startgid) && (gid <= endgid)) {
            
            lfptrace = lfptracelist.o(j)
            
            cell = pc.gid2cell(gid)
            vlfp = cell.apical[cell.NumApical-1].v(0.5) - cell.basal[0].v(0.5)
            vec = new Vector()
            vec.append(t, vlfp)
            lfptrace.append(vec.c)
            j = j + 1
        }
    }
    
    return r
}

objref lfplist, lfptracelist
lfplist = new List()
lfptracelist = new List()

lfp_dt = 0.5 // sampling interval for LFP

objref mytraceidxlist, lfptracelist
proc sample_lfp() { local i, avglfp, startgid, endgid, gid, celltype localobj vec, lst
    
    avglfp = dipole_lfp()
	//avglfp = dipole_pos_lfp(mypoint.x[0],mypoint.x[1]) // x, y, z position of electrode in microns
    
    if (pc.id == 0) {
        vec = new Vector()
        vec.append(t, avglfp)
        lfplist.append(vec.c)
    }
    
    
    if ((t == 0) && name_declared("traceidxlist")) {
        
        execute("~mytraceidxlist = traceidxlist")
        lfptracelist = new List()
        
        for celltype=0, numCellTypes-1 {
	    if (strcmp(cellType[celltype].cellType_string, "pyramidalcell")==0) {
                startgid = cellType[celltype].cellStartGid
                endgid = cellType[celltype].cellEndGid
                break
            }
        }
        
        for i=0, mytraceidxlist.size()-1 {
            gid = mytraceidxlist.x(i)
            if (pc.gid_exists(gid) && (gid >= startgid) && (gid <= endgid)) {
                lst = new List()
                lfptracelist.append(lst)
            }
        }
    }
    
    if (name_declared("traceidxlist")) {
        execute("~mytraceidxlist = traceidxlist")
        dipole_lfp_traceidx(mytraceidxlist,lfptracelist)
    }
    cvode.event(t + lfp_dt, "sample_lfp()") // execute sample_lfp lfp_dt ms from now
}